PsychoPy2experiment version="2021.1.3"
Settings
  Data filename = u'data/%s_%s_%s' % (sub_data['participant'], expName, expInfo['date'])
  Experiment info = {'': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = latest
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = SSI_GoRT_split
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Routines
  Routine standby
    PolygonComponent focus_circle
      fillColor = black
      lineWidth = circle_thickness
      nVertices = 64
      shape = regular polygon...
      size = (diameter, diameter)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Instructions
    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Respond as FAST as you can with your index and first fingers once you see an arrow. Press the left button if you see the left arrow "<=". Press the right button if you see the right arrow "=>".
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    CodeComponent run_on_start
      Code Type = Py
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      Before Experiment:
        import pandas
        import numpy as np
        #print(pandas.__version__)

        ################################################################################
        ###########################   FUNCTIONS   ######################################
        ################################################################################
        def checkConditionsFile(df):
            ''' This function checks if there is something wrong with the user's
                conditions file. If there is, it returns an error explaining what's
                wrong.

                Parameters
                ----------
                df : panadas.dataframe
                    A pandas data frame that conditions.xlsx has been loaded into via
                    the pandas method: pandas.read_excel()
            '''
            def _build_index_str(str_list, column_name):
                # Builds the appropriate string from a list of indcies.
                if len(str_list) == 1:
                    str_list = str_list[0]
                    string = ('', str_list, column_name, 's an', '')
                elif len(str_list) == 2:
                    str_list = str_list[0] + ' and ' + str_list[1]
                    string = ('s', str_list, column_name, '', 's')
                else:
                    str_list[-1] = 'and ' + str_list[-1]
                    str_list = ', '.join(str_list)
                    string = ('s', str_list, column_name, '', 's')

                string = 'Row%s %s in the %s column of your conditions file contain%s empty field%s!' % string
                return string

            # Check no columns are missing in the conditions file:
            headers = df.columns.tolist()
            if 'TrialType' not in headers:
                raise KeyError('Your conditions file must contain a TrialType column '
                               'indicating which trials are Go trials (0), or Stop'
                               'trials (1, 2, or 3).')

            if 'Block' not in headers:
                raise KeyError('Your conditions file must contain a Block column '
                               'indicating the block number each trial belongs to.')

            if 'BlockType' not in headers:
                raise KeyError('You must include a BlockType column in your '
                               'conditions file!\nThe column must have a "practice" '
                               'or real trial (e.g. "fMRI") identifier on each row '
                               'that a new block begins.')

            # Check TrialType and Block are not empty:
            if any(df["TrialType"].isnull()):
                index = [str(i+2) for i, tf in enumerate(df["TrialType"].isnull()) if tf is True]
                raise ValueError(_build_index_str(index, 'TrialType'))

            if any(df["Block"].isnull()):
                index = [str(i+2) for i, tf in enumerate(df["Block"].isnull()) if tf is True]
                raise ValueError(_build_index_str(index, 'Block'))

            # Check the Block numbers make sense:
            switch = df['Block'].diff().tolist()[1:] + [1.0]
            if any([True for i in switch if ((i != 1.0) and (i != 0.0))]):
                raise ValueError('The Block column in your conditions file doesn\'t '
                                 'have linearly increasing block numbers!')

            # Check BlockType has an input on each row that a new trial begins:
            switch_indecies = [i for i, val in enumerate(switch) if val == 1.0]
            nan_present = [True for i in switch_indecies if str(df['BlockType'].iloc[i]) == 'nan']
            if any(nan_present):
                raise ValueError('The BlockType column in your conditions file must '
                                 'have a "practice" or real trial (e.g. "fMRI") '
                                 'identifier on each row that a new block begins.')


        def gen_LR_array(count, LRratio=-1, disp=False, symb=['<=','=>']):
            ''' This function creates a random array of right and lefts with
                with the ration of lefts to rights being defined by the LRratio input.

                count : int
                    Length of the desired left/right array.

                LRratio : float, default=-1
                    Ratio of '<='s to '=>'s in the array. If LRratio is not within
                    the range [0, 1] then the ratio of lefts to rights will be random.

                disp : bool, default=False
                    Prints the number of lefts and rights present in the output array

                symb : list, default=['<=','=>']
                    What symbol to use in the list for left and right respectievly.

                Outputs
                -------
                direction : list of str
                    Left-right list to print during the sequence
            '''
            #Check LRratio and count:
            if not isinstance(count, int):
                raise ValueError('the input \'count\' must be an int!')

            if not (isinstance(LRratio, float) or isinstance(LRratio, int)):
                raise ValueError('the input \'LRratio\' must be an int or a float!')

            if len(symb) != 2:
                raise ValueError('The input, symb, must be a list of length 2. '
                                 'The element in index 0 corresponding to left, '
                                 'and the elment in index 1 corresponding to right.')

            #Build a random array of rights and lefts:
            direction = []
            left_index = []
            right_index = []
            for index, ran in enumerate(np.random.rand(count)):
                if ran <= 0.5:
                    direction.append(symb[0])
                    left_index.append(index)
                else:
                    direction.append(symb[1])
                    right_index.append(index)

            if (LRratio >= 0) and (LRratio <= 1):
                # Correct the distribution of lefts and rights:
                excess = len(left_index) - round(count*LRratio)
                if excess > 0: #There are more lefts than rights
                    # Sample the left array and change direction appopriately:
                    for ex in range(excess):
                        target = int(np.floor(np.random.rand(1)*len(left_index)))
                        direction[left_index[target]] = symb[1]
                        left_index.pop(target)

                elif excess < 0: #There are more rights than lefts
                    # Sample the right array and change direction appopriately:
                    for ex in range(-excess):
                        target = int(np.floor(np.random.rand(1)*len(right_index)))
                        direction[right_index[target]] = symb[0]
                        right_index.pop(target)

            if disp:
                print(' Lefts: ', len([1 for i in direction if i == symb[0]]), ', ',
                      'Rights: ', len([1 for i in direction if i == symb[1]]))

            return direction

        def getLRratios(df_column):
            ''' Cpnverts either the "L2R_ratio" or "BlockType" arrays in your
                conditions.xlsx file to a list of ratios which can be used to
                assign the <= => stimuli for each trial. If no "L2R_ratio" is
                present "BlockType" is used by defaulting 'practice' trials to
                a 50:50 ratio of <= and => stimuli and everything else to
                a random ratio. See gen_LR_array for valid ratios.
            '''
            ratios = []
            for i, r in enumerate(df_column):
                if str(r) == 'nan':
                    ratios.append(r)
                elif not isinstance(r, str):
                    ratios.append(r)
                elif r.lower() == 'practice':
                    ratios.append(0.5)
                else:
                    ratios.append(-1) #random
            return ratios
        ################################################################################
        ################################################################################

        ## Load the conditions file early because psychopy doesn't load on startup
        df = pandas.read_excel(conditions_path)


        ## Make trial, block, and SSDave loop counters
        current_trial = 0
        current_block = 0
        current_block_trial = 0
        rt_counter = 0


        ## Generate necessary variables for temporarily storing the SSD staircases:
        SSD = [0.0, 0.0, 0.0] #placeholder until actual values are generated by the subject
        goRTs = [None]*nRTaves


        ## Inital maximum time subjects have to respond:
        # (will be overwritten after the first set of Go trials)
        goMax = 1.0 #s


        ## Generate Stim Arrows:
        # Generate the arrow directions which will presented to the participant:
        #1) Get Left to Right ratios listed by the
        #   user or create defaults if none are supplied:
        if 'L2R_ratio' in df.columns.tolist():
            if all(df["L2R_ratio"].isnull()):
                ratios = getLRratios(df['BlockType']) #If the column's there but empty
            else:
                ratios = getLRratios(df['L2R_ratio']) #If the column's not empty
        else:
            ratios = getLRratios(df['BlockType']) #If the column's not there


        # Get when different blocks occur:
        switch = df['Block'].diff().tolist()[1:] + [1.0]


        # create the direction list:
        direction = []
        count = 1
        for i in range(len(df)):
            # Check L2R_ratio for nans:
            if str(ratios[i]) != 'nan':
                LRratio = ratios[i]
                if isinstance(LRratio, str):
                    LRratio = -1

            #Create the block's array:
            if switch[i] == 0.0:
                count += 1
            else:
                direction = direction + gen_LR_array(count, LRratio)
                count = 1



        ## Generating ISI times before the task to save on mid-task processing time:
        ITInulltime = [1375, 625, 750, 2625, 3000, 1000, 500, 4000, 1000, 625,
                       1625, 2250, 1250, 2375, 1625, 875, 3000, 3250, 625, 2875,
                       625, 1250, 2875, 1375, 1625, 3125, 625, 500, 2000, 500,
                       500, 875, 2750, 750, 625, 2125, 1125, 1125, 1250, 1000,
                       2500, 2500, 1500, 1250, 1000, 1750, 625, 1875, 1625, 500,
                       1875, 1375, 625, 2250, 1000, 2125, 875, 1125, 1125, 3750,
                       2250, 500, 2125, 1125, 1500, 625, 1000, 500, 1750, 750,
                       1375, 1875, 875, 3500, 750, 500, 2000, 1250, 875, 1375,
                       1500, 625, 625, 1250, 2125, 750, 625, 750, 875, 1750,
                       1750, 2375, 2500, 750, 750, 625, 1875, 750, 2125, 750,
                       3375, 2625, 1625, 1000, 1875, 750, 500, 3375, 500, 625,
                       3875, 500, 1750, 2000, 500, 2750, 625, 625, 1750, 875,
                       1000, 875, 1125, 1500, 1125, 1375, 750, 1500, 1375, 750,
                       625, 2375, 2000, 625, 2625, 1500, 1000]
        # # I need to sample the above array for the null time. The appraoch I will take
        # # is I will use the block array from the conditions file to determine when a
        # # new block occurs. Then I will find the indexes of these new blocks. Finally,
        # # I will use index1 to index2 to choose the correct sample size to take from
        # # the  above array.
        # index = df['Block'].diff()
        # index.iloc[0] = 1.0
        # index = [i for i, val in enumerate(index) if val == 1.0] + [len(index)]
        # ITIChoices = []
        # for i in range(len(index)-1):
        #     ITIChoices = ITIChoices + ITInulltime[index[i]:index[i+1]]
        # ITIChoices = [isi/1000 for isi in ITIChoices] # The 1/1000 converts to seconds
        ITIChoices = [i/1000 for i in ITInulltime]

        ## Identify which blocks are go_only blocks:
        # This is needed in order to determine which messages to display to the subject
        # in 'Rest_Period' -> 'block_prep'
        stops_started_ref = False
        trial_types = [bool(tt) for i, tt in enumerate(df['TrialType'])]
        block_n = [b for i, b in enumerate(df['Block'])]

        stops_start = block_n[-1]+1
        for i, tt in enumerate(trial_types):
            if tt:
                stops_start = block_n[i]
                break
      Begin Experiment:
        # Check current subject for left/right handedness
        print(sub_data['handedness'])
        if sub_data['handedness'] == 'Left':
            LEFT = '8'
            RIGHT = '7'
        elif sub_data['handedness'] == 'Right':
            LEFT = '2'
            RIGHT = '3'
        else:
             error_text = 'Invlaid handedness!'

        # Store the keys that the subject can press during stim:
        possible_keys = (LEFT, RIGHT)
      Begin Routine:
        # Save the sound frequency to the output data:
        thisExp.addData('Tone (Hz)', sound_frequency)
    ButtonComponent proceed_button
      bold = True
      color = black
      fillColor = ghostwhite
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = [0.4,0.15]
      startVal [time (s)] = 0.1
      text = Proceed
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  Routine go_stim
    PolygonComponent green_go_circle
      fillColor = black
      lineColor = chartreuse
      lineWidth = circle_thickness
      nVertices = 64
      shape = regular polygon...
      size = (diameter, diameter)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent arrow_stim_go
      font = Times
      letterHeight = arrowStimSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $arrow
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    KeyboardComponent gokey_resp
      allowedKeys = '2','3','7','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine stop_stim
    PolygonComponent green_stop_polygon
      fillColor = black
      lineColor = chartreuse
      lineWidth = circle_thickness
      nVertices = 64
      shape = regular polygon...
      size = (diameter, diameter)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent arrow_stim_stop
      font = Times
      letterHeight = arrowStimSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $arrow
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    SoundComponent stop_sound
      durationEstim = 0.5
      hamming = False
      sound [set every repeat] = $sound_frequency
      startEstim = 0.25
      startVal [time (s)] = SSD[TrialType-1]
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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    KeyboardComponent stopkey_resp
      allowedKeys = '2','3','7','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine routine_1
  Routine SETTINGS
    CodeComponent user_settings
      Code Type = Py
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      Before Experiment:
        """##########################################################################"""
        """################                                          ################"""
        """####                             SETTINGS                             ####"""
        """################                                          ################"""
        """##########################################################################"""
        # Conditions path:
        conditions_path = "conditions.xlsx"

        # This block is for defining settings that are hard
        # to call from psychopy because of it's order the builder's execution.

        # Default sound values.
        # (Over written by those chosen using the python script called within the 'ext_scripts' code block)
        sound_volume = 0.06 # value between 0 and 1
        sound_frequency = 500 # Hz

        # Inter-Stimulus Interval settings (see 'Instructions' -> "run_on_start"):
        meanITItime = 1000    # ms
        ITImin      = 500     # ms
        ITImax      = 4000    # ms
        ITIfactor   = 125     # ms

        # Maximum time the subjects have to respond (see 'Rest_Period' -> "block_prep"):
        GoMaxMultiplier = 1.0 #Sets the max time they have to their meanRT*GoMaxMultiplier

        # SSD settings (see 'Rest_Period' -> "block_prep"):
        startSSD1 = 0.80 # The fraction used to compute SSD1 from the subject's go-RT (between 0 & 1)
        startSSD2 = 0.45 # The fraction used to compute SSD2 from the subject's go-RT (between 0 & 1)
        startSSD3 = 0.20 # The fraction used to compute SSD3 from the subject's go-RT (between 0 & 1)
        stepSize = 0.050 # Amount an SSD will increase/decrease by in each stop trial in ms
        minSSD = 0.005   # ms
        maxSSD = 1.0     # ms

        nRTaves = 16 # The number of most recent go trials to average over when computing each SSD


        # Stimulus and feedback images:
        fb_size = 0.6675       #Adjusts "'size [w,h]'" in "feedback_img" in 'go_feedback'/'stop_feedback'
        arrowStimSize = 0.18   #Adjusts "'letter hight'" in "arrow_stim_go" in 'go_stim'/'stop_stim'
        circle_size = 1.24     #Adjusts "'size [w,h]'" in "green_go_circle" & "focus_circle" in 'go_stim'/'stop_stim' & 'standby' respectively
        circle_thickness = 3   #Adjusts "'Line width'" in "green_go_circle" & "focus_circle" in 'go_stim'/'stop_stim' & 'standby' respectively
      Begin Experiment:
        # Generate circle stim diameter from screen resolution
        diameter = (circle_size)*296/win.size[0] #win.size gives the resolution you set

        # This is the resolution of feedback images:
        feedback_image_res = [960, 720]
        img_ratio = feedback_image_res[0]/feedback_image_res[1]   #4/3
        #win.ratio = win.size[0]/win.size[1]
        print(expInfo, win.size, img_ratio)
        print('^^^^^^^^^^^^^^^^^^^^^^^^')
        import tkinter
    CodeComponent ext_scripts
      Code Type = Py
      Before Experiment:
        ## Subject information:
        from external_functions import participant_details_GUI_v2p2 as pdg
        sub_data = pdg.pardetGUI()
        # Check if the GUI was exited prematurely and end the experiment:
        if sub_data['soundtest'] == 100:
            quit()
      Begin Experiment:
        ## Handle subject information:
        # Pass subject data to PsychoPy:
        expInfo['participant'] = sub_data['participant']
        expInfo['gender'] = 'N/A' #sub_data['gender']
        expInfo['handedness'] = sub_data['handedness']
        expInfo['ethnicity'] = sub_data['ethnicities']
        run_sound_test = sub_data['soundtest']
      Begin Routine:
        ## This block is used to point at external psychopy scripts I've written to
        ## record subject information prior to the experiment. Ideally this will make
        ## it easier for people to use them in their own tasks without having to
        ## directly edit them into psychopy. The worse case scenario is that eveything
        ## breaks because of version differneces.

        ## Volume Controls:
        from external_functions import test_soundv1p1 as ts
        if run_sound_test == 1:
            sound_volume, sound_frequency = \
                    ts.TestSound(win, defaultKeyboard, expInfo,
                                 nReps=100, SST_endExpNow=endExpNow,
                                 SST_frameTolerance=frameTolerance)
    CodeComponent resave_data
      Code Type = Py
      disabled = True
      Before Experiment:
        import SST_cleandata_v1p1

        # Monkey-Patch stop function (bad practice, yes, but currently the best I can do):
        def quit():
            """Close everything and exit nicely (ending the experiment)
            """
            # pygame.quit()  # safe even if pygame was never initialised
            logging.flush()

            for thisThread in core.threading.enumerate():
                if hasattr(thisThread, 'stop') and hasattr(thisThread, 'running'):
                    # this is one of our event threads - kill it and wait for success
                    thisThread.stop()
                    while thisThread.running == 0:
                        pass  # wait until it has properly finished polling
            try:
                # Pre-save the data so that I can call my re-write function:
                # (This pre-call is do to avoid monkey-patching the saveAsWideText method)
                thisExp.saveAsWideText(thisExp.dataFileName + '.csv', delim=',')

                print("Executing Rhys' monkey-patched stop function!!")
                cleandata.resave(thisExp.dataFileName)
            except:# NameError:
                # If the data-file was never created then we just exit normally:
                pass
            sys.exit(0)  # quits the python session entirely

        core.quit = quit # Monkey-Patch psychopy's quit method
      End Experiment:
        #file_path = thisExp.dataFileName
  Routine go_feedback
    CodeComponent checkKeypress_go
      Code Type = Py
      Begin Routine:
        #Compute wait time after subject response:
        if not isinstance(gokey_resp.rt, float):
            gokey_resp.rt = 1.0
        timeremaining = 1.0 - gokey_resp.rt

        ## Determine feedback:
        # Check if the subject responded slower than allowed:
        if (gokey_resp.rt > goMax):# and (timeremaining > 0.0):
            img_path = 'display_images/slow.JPG'
        else:
            # Otherwise check if they responded correctly:
            if (gokey_resp.keys == LEFT) and (arrow == '<='):
                img_path = 'display_images/Smiley_Black2.JPG'
            elif (gokey_resp.keys == RIGHT) and (arrow == '=>'):
                img_path = 'display_images/Smiley_Black2.JPG'
            else:
                img_path = 'display_images/FrowneyBlue_Black2.JPG'

        # Store reaction time for SSD computation:
        if gokey_resp.rt is not []:     # <- Filter out no responces
            goRTs[rt_counter] = gokey_resp.rt
            rt_counter = (rt_counter + 1)%nRTaves
    ImageComponent go_feedback_img
      image [set every repeat] = $img_path
      size = (fb_size*img_ratio, fb_size)
      startEstim = 0.25
      startVal [time (s)] = timeremaining
      stopVal [duration (s)] = 0.5
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  Routine stop_feedback
    CodeComponent checkKeypress_stop
      Code Type = Py
      Begin Routine:
        #Compute ISI time after subject response:
        if not isinstance(stopkey_resp.rt, float):
            stopkey_resp.rt = 1.0
        timeremaining = 1.0 - stopkey_resp.rt

        ## Determine feedback:
        # Check subject's answer:
        if stopkey_resp.keys == None:
            img_path = 'display_images/Smiley_Black2.JPG'

            #Increment the SSDs:
            SSD[TrialType-1] += stepSize

        else:
            img_path = 'display_images/FrowneyBlue_Black2.JPG'

            #Decrement the SSDs:
            SSD[TrialType-1] -= stepSize


        # Check SSD is within bounds:
        if SSD[TrialType-1] < minSSD:
            SSD[TrialType-1] = minSSD

        if SSD[TrialType-1] > maxSSD:
            SSD[TrialType-1] = maxSSD
    ImageComponent stop_feedback_img
      image [set every repeat] = $img_path
      size = (img_ratio*fb_size, fb_size)
      startEstim = 0.25
      startVal [time (s)] = timeremaining
      stopVal [duration (s)] = 0.5
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  Routine End
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Fin
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  Routine Pre_Trial
    CodeComponent check_block
      Code Type = Py
      Begin Routine:
        # check if and when a rest period should occur:
        #METHOD:
        # Because block # increments upwards I will simply display a message when the
        # block number changes. The message will then be chosen based on the value of
        # L2R_ratio.
        if current_block != Block:
            current_block = Block
            enter_display_loop = 1
        else:
            enter_display_loop = 0
    CodeComponent pre_trial_prep
      Code Type = Py
      Begin Routine:
        # Check go/stop trial
        if TrialType == 0:
            goTrial = 1
            stopTrial = 0
        else:
            goTrial = 0
            stopTrial = 1

        # Call trial arrow
        arrow = direction[current_trial]

        # Call ITI and SSD time
        ITI_time = ITIChoices[current_block_trial]

        # Store to data output:
        thisExp.addData('Trial', current_trial)
        thisExp.addData('ITI', ITI_time)
        thisExp.addData('Direction', arrow)

        # Increment counters
        current_trial += 1
        current_block_trial += 1
  Routine Rest_Period
    CodeComponent block_prep
      Code Type = Py
      Before Experiment:
        # Define the possible texts to display:
        DISP1 = ' '.join(['REST INTERVAL. The scientist will press [Proceed] after ',
                          'asking you when you want to continue. ',
                          'Remember, respond as FAST as you can once you see an arrow.'])

        DISP2 = ' '.join(['NOW YOU WILL START HAVING STOP TRIALS.',
                          'The scientist will press [Proceed] after ',
                          'asking you when you want to continue.',
                          'Remember, respond as FAST as you can once you see',
                          'the arrow. However, if you hear a beep, your task',
                          'is to STOP yourself from pressing. Stopping and',
                          'Going are equally important.'])

        DISP3 = ' '.join(['REST INTERVAL. The scientist will press [Proceed] after ',
                          'asking you when you want to continue. ',
                          'Remember, respond as FAST as you can once you hear a beep.',
                          'Your task is to STOP yourself from pressing.',
                          'Stopping and Going are equally important.'])
      Begin Routine:
        ## Average the subject's last 16 RT's:
        aveRT = np.mean(list(filter(None, goRTs)))

        ## Calculate starting SSDs:
        #       (SSD values are adjusted within 'stop_feedback' -> "checkKeypress_stop")
        #       (SSD values are saved within 'ITI' -> "writeSSD")
        SSD = [startSSD1*aveRT, startSSD2*aveRT, startSSD3*aveRT]
        # Incase the subject doesn't push anything ever:
        if np.isnan(SSD[0]) and np.isnan(SSD[1]) and np.isnan(SSD[2]):
            SSD = [0.25]*3

        ## Create a maximum amount of time the subject has to respond based on their
        ## usual response time:
        goMax = aveRT*GoMaxMultiplier
        thisExp.addData('goMax', goMax)
        print('goMax response time: ', goMax)
        print('SSD times: ', SSD)

        ## Check the block type in the conditions file:
        if BlockType.lower() == 'practice':
            init_real_trial = 0
        else:
            init_real_trial = 1

        ## Choose which message to display to the subject:
        if init_real_trial == 0:
            DISP = DISP1
        elif current_block == stops_start:
            DISP = DISP2
            stops_started_ref = True
        elif stops_started_ref:
            DISP = DISP3
        else:
            DISP = DISP1

        # Reset counters:
        current_block_trial = 0
    TextComponent rest_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $DISP
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    ButtonComponent proceed_button2
      bold = True
      color = black
      fillColor = ghostwhite
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = [0.4,0.15]
      startVal [time (s)] = 0
      text = Proceed
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  Routine Wait4Celeritas
    KeyboardComponent Trigger
      allowedKeys = 'equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Wait_Message
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for Celeritas's "=" trigger.
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  Routine countdown
    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ~~ 10 ~~
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    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = ~~ 9 ~~
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    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = ~~ 8 ~~
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    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = ~~ 7 ~~
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = ~~ 6 ~~
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
      text = ~~ 5 ~~
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 1.0
      text = ~~ 4 ~~
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 1.0
      text = ~~ 3 ~~
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 1.0
      text = ~~ 2 ~~
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    TextComponent text_1
      letterHeight = 0.1
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 1.0
      text = ~~ 1 ~~
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  Routine Countdown
    TextComponent _10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ----- 10 -----
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    TextComponent _09
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = ----- 9 -----
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    TextComponent _08
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = ----- 8 -----
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    TextComponent _07
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = ----- 7 -----
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    TextComponent _06
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = ----- 6 -----
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    TextComponent _05
      letterHeight = 0.05
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
      text = ----- 5 -----
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    TextComponent _04
      letterHeight = 0.05
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 1.0
      text = ----- 4 -----
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    TextComponent _03
      letterHeight = 0.05
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 1.0
      text = ----- 3 -----
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    TextComponent _02
      letterHeight = 0.05
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 1.0
      text = ----- 2 -----
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    TextComponent _01
      letterHeight = 0.05
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 1.0
      text = ----- 1 -----
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  Routine ITI
    PolygonComponent blank_ITI_stim
      fillColor = black
      lineColor = black
      nVertices = 1
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI_time
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI_time
      text [set every repeat] = $'ITI time: ' + str(ITI_time)
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    CodeComponent writeSSD
      Code Type = Py
      Begin Routine:
        # Store SSD data to data output:
        thisExp.addData('SSD1', SSD[0])
        thisExp.addData('SSD2', SSD[1])
        thisExp.addData('SSD3', SSD[2])
Flow
  Routine SETTINGS
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_path
    loopType = sequential
    nReps = 1
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    Routine Pre_Trial
    LoopInitiator rest_loop loopType="TrialHandler"
      loopType = random
      nReps = enter_display_loop
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      Routine Rest_Period
      LoopInitiator real_trials loopType="TrialHandler"
        loopType = random
        nReps = init_real_trial
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        Routine Wait4Celeritas
      LoopTerminator real_trials
      Routine Countdown
    LoopTerminator rest_loop
    Routine standby
    LoopInitiator go_trial_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = goTrial
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      Routine go_stim
      Routine go_feedback
    LoopTerminator go_trial_loop
    LoopInitiator stop_trial_loop loopType="TrialHandler"
      loopType = random
      nReps = stopTrial
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      Routine stop_stim
      Routine stop_feedback
    LoopTerminator stop_trial_loop
    Routine ITI
  LoopTerminator trials
  Routine End
