PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = latest
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = TestSoundSettingsv1p1
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        First Screen
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = --- 5 ---
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.2
      text = --- 4 ---
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.2
      text = --- 3 ---
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.2
      text = --- 2 ---
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
      text = --- 1 ---
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  Routine End_Prompt
    TextComponent End
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = End
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  Routine TestSound
    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Soundcard Testing
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    CodeComponent get_vol
      Code Type = Py
      Begin Experiment:
        # Set default values:
        vol = 0.06120702
      Begin Routine:
        # Place marker:
        if Volume.markerPos is None:
            Volume.markerPos = vol
      Each Frame:
        # Get the current value of the slider to print:
        if Volume.markerPos is None:
            Volume.markerPos = vol
        vol = Volume.markerPos

        # Correct to a percentage:
        corrected_vol = 100*(vol - Volume.ticks[0])/(Volume.ticks[-1] - Volume.ticks[0])
        corrected_vol = round(corrected_vol, 2)

        # Convert to string:
        string_vol = str(corrected_vol) + ' %'
    SliderComponent Volume
      forceEndRoutine = False
      granularity = 0
      labels = ('0', '', '', '', '', '', '', '', '', '', '1')
      letterHeight = 0.05
      size = (0.4, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0.0, 0.061207024560089175, 0.12885124808584156, 0.2036096767023117, 0.2862305178902687, 0.3775406687981455, 0.47845399210662964, 0.5899804622735316, 0.7132362736976229, 0.8494550119673449, 1.0)
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    TextComponent print_vol
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $'Volume: ' + string_vol
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    CodeComponent get_freq
      Code Type = Py
      Begin Experiment:
        # Set default Values:
        freq = sound_freq_default
      Each Frame:
        # Get the current value of the slider to print:
        if frequency.markerPos is None:
            frequency.markerPos = freq
        freq = frequency.markerPos

        # Convert to string:
        string_freq = str(freq) + ' Hz'
    SliderComponent frequency
      forceEndRoutine = False
      granularity = sound_freq_test_steps
      labels = (sound_freq_test_range[0], sound_freq_test_range[1])
      letterHeight = 0.05
      ori = 90
      pos = (-0.4, 0.0)
      size = (0.05, 0.4)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (sound_freq_test_range[0], sound_freq_test_range[1])
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    TextComponent print_freq
      letterHeight = 0.05
      pos = (-0.4, 0.25)
      startVal [time (s)] = 0.0
      text [set every frame] = $string_freq
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    ButtonComponent test_sound
      bold = True
      callback = play_sound = 1
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, 0)
      size = [0.25/1.25, 0.25]
      startVal [time (s)] = 0.1
      text = Test Sound
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    ButtonComponent confirm_sound
      bold = True
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (0.5, -0.5)
      size = (0.25/1.125, 0.25)
      startVal [time (s)] = 0.1
      text = Confirm Sound Settings
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      callback:
        loop_back.finished = True
        play_sound = 0
  Routine Display
    TextComponent result_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $'You picked:\nVolume = ' + str(corrected_vol) + ' % (' + str(round(vol,4)) + ')\nFrequency = ' + str(freq) + ' Hz'
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  Routine Settings
    CodeComponent settings
      Code Type = Py
      Begin Experiment:
        sound_freq_test_range = [100, 2000] # Hz
        sound_freq_test_steps = 50 # Hz
        sound_freq_default = 500
  Routine play_sound
    CodeComponent correct_trigger
      Code Type = Py
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      Begin Experiment:
        play_sound = 0
        print(vol)
        print(freq)
    SoundComponent play_test_sound
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $freq
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
      volume [set every repeat] = vol
    TextComponent sound_text
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $'Playing:\n f = ' + str(freq) + ' Hz\nvolume = ' + str(round(vol,2))
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Flow
  Routine Settings
  LoopInitiator loop_back loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 50
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    Routine TestSound
    LoopInitiator check_play loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = play_sound 
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      Routine play_sound
    LoopTerminator check_play
  LoopTerminator loop_back
  Routine Display
